ScriptName houghCircles

# If something goes wrong, set Debug = 1
Debug = 0              # True = 1 ; False = 0

### semmatch arguments
param2 = 50   # hough threshold
maxPts = 20   # randomly selected subset of all found points

# maps will be dynamically binned down to the following pixel size
downscaleToPixelSize = 40

acquire = 1                                    # True = 1 ; False = 0
groupOption = 2
    #    0 = no groups
    #    1 = groups based on radius
    #    2 = all points as one group
    #    3 = specify a certain number of groups
    #    4 = specify number of points per group

# names of temporary files used by semmatch
outputNav = semmatch_nav.nav
image = MMM.jpg

ReportIfNavOpen
If $reportedValue1 != 2
   Exit
Endif
ReportNavFile 1
navfile = $reportedValue1$reportedValue2
navdir = $reportedValue3
SetDirectory $navdir
SaveNavigator

If $acquire != 1 AND $acquire != 0
   Echo acquire should be either 1 or 0
   Exit
Endif

If $Debug == 1
   debugStr = /k
ElseIf $Debug == 0
   debugStr = /c
Else
   Echo Debug should be either 1 or 0
   Exit
Endif

## load and bin MMM map
ReportNavItem
If $RepVal5 != 2        # if not a map item
   Echo Not a map item. Select a Map item from the navigator.
   Exit
Endif
MAP = $navLabel
Echo Map Label: $MAP
# load map into Q buffer
SetUserSetting BufferToReadInto 16
SetUserSetting LoadMapsUnbinned 1
# uncheck Montage Controls "Align pieces in overview"
ReportUserSetting MontageAlignPieces alignChecked
If $alignChecked == 1
   SetUserSetting MontageAlignPieces 0
Endif
LoadNavMap

# reduce image if larger than 2000x2000
maxdimLimit = 2000
ImageProperties Q width height
pixelSize = $repVal5
maxdim = $width
If $width < $height
   maxdim = $height
Endif

If $maxdim < $maxdimLimit
   Copy Q A
   reduction = 1
Else
   If $pixelSize < $downscaleToPixelSize
      reduction = $downscaleToPixelSize / $pixelSize
      pixelSize = $downscaleToPixelSize
   Else
      reduction = $maxdim / $maxdimLimit
      pixelSize = $pixelSize * $reduction
   Endif
   ReduceImage Q $reduction
Endif
Show Q

## make a jpeg image
SaveToOtherFile A JPG JPG $image
Echo saved $image

ReportOtherItem -1
newLabel = $navIntLabel + 1

RunInShell cmd $debugStr " "semmatch" \
"--houghCircles" \
"--maxPts" "$maxPts" \
"--param2" "$param2" \
"--navfile" "$navfile" \
"--reduction" "$reduction" \
"--image" "$image" \
"--mapLabel" "$MAP" \
"--newLabel" "$newLabel" \
"--groupOption" "$groupOption" \
"--output" "$outputNav" \
"--acquire" "$acquire" \
"--pixelSize" "$pixelSize" "

MergeNavFile $outputNav
If $alignChecked == 1
   SetUserSetting MontageAlignPieces 1
Endif
Show Q

